PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TSRlearn_fast_sequences
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine exp_settings
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    CodeComponent set_variables
      Code Type = Auto->JS
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      Begin Experiment:
        font_name = "Open Sans"
        font_size = 0.03

        language = "german"
        left_key ="g"
        up_key = "r"
        right_key "b"
        down_key "y"

        allowed_keys = [left_key, up_key, right_key, down_key]

        fast_img_dur = 0.1 # [s]
        mask_dur = 0.048 # [s]
        fast_img_repetitions = 30
  Routine beginning_instruction
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    TextComponent instruction_begin
      font = $font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
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    CodeComponent set_instruction_begin
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_begin.text = (
            "You will now see image sequences in quick succession. "
            "Please focus on the screen. "
            "After each image sequence, you will have to answer a question about the sequence. "
            "This will only take a few minutes.\n"
            "[Press the return key once your are ready.]"
            )
        if language == "french":
            instruction_begin.text = (
            "Vous allez maintenant voir des séquences d’images présentées en succession rapide. "
            "Veuillez rester concentré(e) sur l’écran. "
            "Après chaque séquence d’images, vous devrez répondre à une question concernant la séquence. "
            "Cela ne prendra que quelques minutes.\n"
            "[Appuyez sur la touche Entrée lorsque vous êtes prêt.]"
            )

        if language == "german":
            instruction_begin.text = (
            "Sie werden nun Bildsequenzen sehen, die in schneller Abfolge präsentiert werden. "
            "Bitte richten Sie Ihre Aufmerksamkeit auf den Bildschirm. "
            "Nach jeder Bildsequenz werden Sie eine Frage zur Sequenz beantworten. "
            "Es wird nur ein paar Minuten dauern.\n"
            "[Drücken Sie die Eingabetaste, sobald Sie bereit sind.]"
            )
  Routine fixation
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    TextComponent fix_cross
      font = font_name
      letterHeight = font_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine question_fastseq
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    TextComponent question_fastseq_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent set_question_fastseq_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            question_fastseq_text.text = (
            "Which position did this image appear in? "
            "Press 1-5 on the keyboard")
        if language=="german":
            question_fastseq_text.text = ("An welcher Position ist dieses Bild erschienen? "
        "Drücken Sie die Tasten 1 bis 5 auf der Tastatur.")
        if language=="french":
           question_fastseq_text.text = ("À quelle position cette image est-elle apparue ? "
        "Appuyez sur les touches 1 à 5 du clavier. ")
    KeyboardComponent key_resp_2
      allowedKeys = "1", "2", "3", "4", "5"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_quest_fastseq
      image [set every repeat] = $prompt_image
      pos = (0, 0.15)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    CodeComponent bids_fastseq_response
      Code Type = Auto->JS
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      End Routine:
        if key_resp_2:
            bids.add_instant(
            "fastseq_resp",
            trial_type = "fast_seq",
            trial_num=repeats_fastseq.thisN,
            response=(key_resp_2.keys if key_resp_2.keys else "m"),
            response_time=(key_resp_2.rt if hasattr(key_resp_2, "rt") else None),
            correct=(int(probe_position)==int(key_resp_2.keys)),
            expected_response = probe_position,
        )
  Routine fast_seq_image
    ImageComponent image
      image [set every repeat] = $img_seq
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fast_img_dur
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
  Routine fast_seq_mask
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    ImageComponent mask_image
      image [set every repeat] = $mask_img
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = mask_dur
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  Routine end_instruction
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    CodeComponent set_trigger_end
      Code Type = Auto->JS
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      Begin Experiment:
        trigClock = core.Clock()
      Begin Routine:
        trigNumber = trigger_dict["start/end"]
        trigPending = False
    CodeComponent bids_instruc_7
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_part7,
                                type_of_stimulus="instructions",
                                component_label="instruction_part7")
      End Routine:
        bids.mark_offset(instruction_part7)
    TextComponent instruction_part7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part7_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part7.text = (
            "You finished the last task block. Good job!\n"
            "Press the return key to end this part of the experiment. "
            )

        if language == "german":
            instruction_part7.text = (
            "Sie haben den letzten Aufgabenblock abgeschlossen. Gut gemacht!\n"
            "Drücken Sie die Eingabetaste, um diesen Teil des Experiments zu beenden." )

        if language == "french":
            instruction_part7.text = (
            "Vous avez terminé la dernière partie des exercices. Bravo!\n"
            "Appuyez sur la touche Entrée pour terminer cette partie de l'expérience. "
        )
    KeyboardComponent continue_button_8
      allowedKeys = allowed_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine exp_settings
  Routine beginning_instruction
  LoopInitiator fast_sequences_outer_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine fixation
    LoopInitiator fast_images_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine fast_seq_image
      Routine fast_seq_mask
    LoopTerminator fast_images_loop
    Routine question_fastseq
  LoopTerminator fast_sequences_outer_loop
  Routine end_instruction
