PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Use version = 2025
  Window size (pixels) = [2048, 1152]
  clockFormat = iso
  color = 0.0000, 0.0000, 0.0000
  consoleLoggingLevel = exp
  expName = TSRlearn_localizer-concepts
  keyboardBackend = PsychToolbox
  runMode = 0
  sortColumns = alphabetical
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Routines
  Routine image_pres
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    CodeComponent set_trigger_image
      Code Type = Auto->JS
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      Each Frame:
        if frameN == 0:
            send_trigger(concept_num)
    CodeComponent compute_block_trial_num
      Code Type = Auto->JS
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      Begin Routine:
        current_trial_number = trials.thisN + 1 # make it start at 1
        # block number should increase one trial AFTER a break_interval trial
        if current_trial_number == 1:
            block_num = 1
        elif (current_trial_number - 1) % break_interval == 0:
            block_num = int((current_trial_number - 1) / break_interval) + 1
        else:
            # otherwise keep previous value
            block_num = block_num

        trial_num = current_trial_number

        log("Block number: ", block_num)
        log("Trial number: ", trial_num)
    CodeComponent bids_image
      Code Type = Auto->JS
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      Each Frame:
        concept_label_img = image_shown.split("\\")[0]
        concept_examplar_img =  image_shown.split("\\")[1]
        bids.schedule_onset(image,
                                block_num=block_num,
                                trial_num=trial_num,
                                type_of_stimulus="image",
                                component_label="image",
                                concept_label = concept_label_img,
                                wrd_img_match = int(1-is_mismatch),
                                concept_examplar = concept_examplar_img)
      End Routine:

        bids.mark_offset(image)
    ImageComponent image
      image [set every repeat] = $ "stimuli\\" + image_shown
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur
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  Routine instructions
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    CodeComponent bids_instruc_01
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting

        bids.schedule_onset(instruction_part1,
                                type_of_stimulus="instructions",
                                component_label="instruction_part1")
      End Routine:
        # log offset at last frame of routine

        bids.mark_offset(instruction_part1)
    TextComponent instruction_part1
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
           "Welcome to the first part of the experiment.\n"
            "In this part, you will see different images\n"
            "and hear words.\n"
            "Your task is to decide if the words describe what you see in the images.\n\n"
            "[Press any key to continue.]"
        )

        if language == "german":
            instruction_part1.text = (
            "Willkommen zum ersten Teil des Experiments.\n"
            "In diesem Teil sehen Sie verschiedene Bilder\n"
            "und hören Wörter.\n"
            "Ihre Aufgabe ist es zu entscheiden, ob die Wörter die Dinge beschreiben, die\n"
            "Sie auf den Bildern sehen.\n\n"
            "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part1.text = (
        "Bienvenue dans la première partie de l'expérience. "
        "Dans cette partie, vous verrez différentes images et entendrez des mots. "
        "Votre tâche consiste à déterminer "
        "si les mots décrivent ce que vous voyez dans les images.\n"
        " [Appuyez sur la touche Entrée pour continuer.] "
        )
    KeyboardComponent continue_button
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_meg
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    CodeComponent bids_instruc_meg
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_meg,
                                #trial_type="localizer",
                                #stim_label="instruction_meg")

        bids.schedule_onset(instruction_meg,
                                type_of_stimulus="instructions",
                                component_label="instruction_meg")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_meg)
        bids.mark_offset(instruction_meg)
    TextComponent instruction_meg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_meg_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_meg.text = (
            "The MEG signal is very sensitive to body and eye movements. "
            "Please try to keep still during the task and save any movements for the breaks. "
            "Also, try to blink as little as possible while the task is running. "
            "Thank you!\n"
            "[Press the return key to start the practice trials.]"
        )

        if language == "german":
            instruction_meg.text = (
        "Das MEG-Signal ist sehr empfindlich gegenüber Körper- und Augenbewegungen. "
        "Bitte versuchen Sie, während der Aufgabe so still wie möglich zu bleiben und Bewegungen auf die Pausen zu beschränken. "
        "Versuchen Sie außerdem, während der Aufgabe so wenig wie möglich zu blinzeln. "
        "Vielen Dank!\n"
        "[Drücken Sie die Eingabetaste, um mit den Übungsdurchgängen zu beginnen.]"
        )
    KeyboardComponent continue_button_5
      allowedKeys = "return"
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_02
      Code Type = Auto->JS
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      Each Frame:
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part2,
                                #trial_type="localizer",
                                #stim_label="instruction_02")

        bids.schedule_onset(instruction_part2,
                                type_of_stimulus="instructions",
                                component_label="instruction_part2")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part2)

        bids.mark_offset(instruction_part2)
    TextComponent instruction_part2
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
        "You will first see an image.\n"
        "Then you will hear a spoken word.\n"
        "Decide whether the word matches the image or not.\n\n"
        "[Press any key to continue.]"
        )

        if language == "german":
            instruction_part2.text = (
           "Sie sehen zuerst ein Bild.\n"
           "Danach hören Sie ein gesprochenes Wort.\n"
        "Entscheiden Sie, ob das Wort zu dem Bild passt oder nicht.\n\n"
        "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part2.text = (
        "Après chaque image, vous entendrez un mot. Lorsque "
        "le mot apparaît, vous êtes invité à réfléchir si le "
        "mot correspond à l'objet que vous avez vu dans l'image "
        "précédente ou non. \n "
        "[Appuyez sur la touche Entrée pour continuer.] ")
    KeyboardComponent continue_button_3
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine ITI
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    CodeComponent set_trigger_fix_cross
      Code Type = Auto->JS
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      Begin Routine:
        fixcross_trigger = trigger_numbers_dict["fixation cross ITI"]
      Each Frame:
        if frameN==0:
            send_trigger(fixcross_trigger)
    CodeComponent bids_ITI_logging
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(fix_cross_2,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="fixation cross",
                                component_label="fix_cross_after_trial")
      End Routine:
        # log offset at last frame of routine
        bids.mark_offset(fix_cross_2)
    CodeComponent set_dur_ITI
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.keys == None:
            length_of_ITI = ITI_length
        elif key_resp.keys:
            length_of_ITI = ITI_length + 1
    TextComponent fix_cross_2
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0
      stopVal [duration (s)] = length_of_ITI
      text = +
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  Routine settings
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    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)


        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.set_default_duration(0.005)
        meg_triggers.set_default_reset_value(0)  # set the value the trigger channel returns to for neutral state
        # meg_triggers.enable_printing()
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Before Experiment:
        ## all important task parameters to set ##

        # response prompt positions
        possible_prompt_positions = [-0.1, 0.1] # x coordinates

        # duration of image presentation  [s]
        image_dur = 0.75

        # time to make response [s]
        response_time = 1.5

        # is there feedback or not
        fdback = 1 # [0 = no, 1 = yes]

        # feedback duration [s]
        fdback_dur = 0.2

        # duration of rest breaks [s]
        break_dur = 15

        # interval of the breaks (every x trials)
        break_interval = 50
        total_block_number = 10 # how many blocks in total

        # response - key mapping
        left_key = 'g'
        right_key = 'b'
        center_key = 'r'
        down_key = 'y'
        nonmatch_key = center_key

        possible_keys = [left_key, right_key, center_key, down_key]

        # language for instruction
        language = 'english' # 'english', 'french' or 'german'

        # match /non-match responses or just non-match
        match_responses = 0 # [no "match" responses = 0, match and nonmatch responses = 1]

        font_name = "Sans Sherif"
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger (no Builder BIDS components needed) ---
        from pathlib import Path
        import csv
        import numpy as np
        import atexit

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (add any you want to see in the TSV)
                self.col_order = [
                    "subject", "block_num", "trial_num",
                    "component_label", "onset", "duration",
                    "type_of_stimulus", "concept_label",
                    "concept_examplar",
                    "response_time", "response",
                    "expected_response", "wrd_img_match",
                    "correct"
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, **extra_cols):
                 # Onset: first frame it is STARTED
                if getattr(stim, "status", None) == STARTED and stim not in self.active:
                    # Builder already records exact onset on flip into tStartRefresh;
                    # fall back to current clock if that isn't available.
                    t_on = getattr(stim, "tStartRefresh", None)
                    if t_on is None:
                        t_on = self.clock.getTime()
                    row = {
                        "onset": float(t_on),
                        "duration": np.nan,
                    }
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1

            # to log the offset and therefore compute durations of components
            def mark_offset(self, stim):
                if getattr(stim, "status", None) == FINISHED and stim in self.active:
                    idx = self.active.pop(stim)
                    t_off = getattr(stim, "tStopRefresh", None)
                    if t_off is None:
                        t_off = self.clock.getTime()
                    self.rows[idx]["duration"] = float(t_off - self.rows[idx]["onset"])

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "type_of_stimulus": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        def _bids_autosave():
            try:
                if bids and hasattr(bids, "rows"):
                    out = bids.save(thisExp.dataFileName)
                    print(f"[autosave] BIDS events written to: {out}")
            except Exception as e:
                print(f"[autosave] Failed to save BIDS events: {e}")
      Begin Routine:
        # ---- Create the logger once ----
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant")
            )
        )

        # write a header-only file immediately so each start creates a file
        _ = bids.save(thisExp.dataFileName)

        # atexit autosave: runs on normal finish AND on ESC (core.quit)
        atexit.register(_bids_autosave)
    CodeComponent set_trigger_numbers
      Code Type = Auto->JS
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      Begin Experiment:
        # define which trigger numbers to send
        trigger_numbers_dict = {
        "start/end": 255,
        "word presentation": 99,
        "response (button press)": 127,
        "feedback": 96,
        "fixation cross ITI": 94,
        "break_start": 81,
        "break_end": 82
        }
    CodeComponent set_sound_library
      Code Type = Auto->JS
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      Begin Experiment:
        import importlib.metadata as im

        if im.entry_points.__code__.co_argcount == 0:  # entry_points() takes no args
            _orig_entry_points = im.entry_points

            def _entry_points(*args, **kwargs):
                # PsychoPy calls: entry_points(group="psychopy.sound.backends")
                group = kwargs.get("group", None)
                eps = _orig_entry_points()

                # Old API may return dict-like: {'groupname': [EntryPoint,...], ...}
                if isinstance(eps, dict):
                    return eps.get(group, []) if group else eps

                # If it returns a list, we can filter by .group if present
                if group:
                    return [ep for ep in eps if getattr(ep, "group", None) == group]
                return eps

            im.entry_points = _entry_points
    CodeComponent set_cond_file
      Code Type = Auto->JS
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      Begin Experiment:
        # zero-pad participant number for 0–9
        p_num = int(expInfo['participant'])
        conditions_file = f"sequences/localizer_conditions_{p_num:02d}.xlsx"
    CodeComponent set_trigger_startexp
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger(value=trigger_numbers_dict["start/end"])
  Routine instructions_03
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    CodeComponent bids_instruc_03
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part3,
                                #trial_type="localizer",
                                #stim_label="instruction_03")


        bids.schedule_onset(instruction_part3,
                                type_of_stimulus="instructions",
                                component_label="instruction_part3")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part3)
        bids.mark_offset(instruction_part3)
    TextComponent instruction_part3
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
        "If the word does not match the image, please respond immediately.\n"
        "Press the upper key (red) if the word does not match\n"
        "the image you just saw.\n"
        "If the word matches the image, do not press any key.\n"
        "The fixation cross will briefly change color\n"
        "to show whether your response was correct.\n\n"
        "[Press any key to continue.]"
        )

        if language == "german":
            instruction_part3.text = (
        "Wenn das Wort nicht zu dem Bild passt, reagieren Sie bitte sofort.\n"
        "Drücken Sie die obere Taste (rot), wenn das Wort\n"
        "nicht zu dem Bild passt, das Sie gerade gesehen haben.\n"
        "Wenn das Wort zu dem Bild passt, drücken Sie keine Taste.\n"
        "Das Fixationskreuz verändert kurz seine Farbe,\n"
        "um anzuzeigen, ob Ihre Antwort richtig war.\n\n"
        "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part3.text = (
        "Si l'image et le mot ne correspondent pas, vous devez réagir immédiatement. "
        "Appuyez sur la flèche droite si le mot ne correspond pas à l'image précédente. S'ils correspondent, vous n'avez rien à faire. "
        "La croix de fixation changera rapidement de couleur pour vous indiquer si vous avez bien réagi.\n"
        "[Appuyez sur Entrée pour continuer.] "
        )
    KeyboardComponent continue_button_4
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_end
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    CodeComponent set_trigger_end
      Code Type = Auto->JS
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      Each Frame:
        if frameN==0:
            send_trigger(trigger_numbers_dict["start/end"])
    CodeComponent bids_instruc_end
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_end,
                                #trial_type="localizer",
                                #stim_label="instruction_end")

        bids.schedule_onset(instruction_end,
                                type_of_stimulus="instructions",
                                component_label="instruction_end")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_end)
        bids.mark_offset(instruction_end)
    TextComponent instruction_end
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent instruction_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_end.text = (
            "You have finished the first part of the task. Press any key to exit. "
        )

        if language == "german":
            instruction_end.text = (
            "Sie haben den ersten Teil der Aufgabe beendet. Drücken Sie eine beliebige Taste, um zu beenden. "
        )

        if language == "french":
            instruction_end.text = (
            "Vous avez terminé la première partie de la tâche. Appuyez sur la touche Entrée pour quitter. "
        )
    KeyboardComponent continue_button_7
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_startexp
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    CodeComponent bids_instruc_startexp
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_startexp,
                                #trial_type="localizer",
                                #stim_label="instruction_startexp")
      Each Frame:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_startexp)

        bids.schedule_onset(instruction_startexp,
                            type_of_stimulus="instructions",
                            component_label="instruction_start")
      End Routine:
        bids.mark_offset(instruction_startexp)
    TextComponent instruction_startexp
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent instruction_startexp_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_startexp.text = (
        "You have completed all practice trials.\n"
        "The main task will now begin.\n"
        "Always press the upper key (red) when the word\n"
        "does not match the previous image.\n"
        "The MEG signal is very sensitive to eye\n"
        "and body movements.\n\n"
        "[Press any key to continue.]"
        )

        if language == "german":
            instruction_startexp.text = (
        "Sie haben alle Übungsdurchgänge abgeschlossen.\n"
        "Die Hauptaufgabe beginnt jetzt.\n"
        "Drücken Sie immer die obere Taste (rot), wenn das Wort\n"
        "nicht zu dem vorherigen Bild passt. Das MEG Signal ist sehr\n"
        "empfindlich gegenüber Augenbewegungen und Bewegungen des Körpers.\n\n"
        "[Drücken Sie eine beliebige Taste, um weiterzumachen.]"
        )

        if language == "french":
            instruction_startexp.text = (
        "Vous avez terminé tous les essais pratiques. La tâche principale va maintenant commencer. "
        "Appuyez toujours sur la flèche droite lorsque le mot ne correspond pas à l'image précédente. "
        "Il y aura des pauses régulières pendant lesquelles vous pourrez vous reposer un instant. \n"
        "[Appuyez sur la touche Entrée pour commencer la tâche principale.] "
        )
    KeyboardComponent continue_button_6
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine image_pres_prc
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    ImageComponent image_prc
      durationEstim = 1
      image [set every repeat] = $ "stimuli\\practice_images\\" + image_shown
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = image_dur
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  Routine ITI_prc
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    TextComponent fix_cross_2_prc
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ITI_length
      text = +
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  Routine break_3
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    CodeComponent definition_breaks
      Code Type = Auto->JS
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      Begin Routine:
        if trials.thisN == 0:
           continueRoutine = False
        elif current_trial_number % break_interval!= 0:
            continueRoutine = False
        elif block_num == total_block_number:
             continueRoutine = False
    CodeComponent control_trigger_break
      Code Type = Auto->JS
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      Begin Routine:
        run_break = False
        end_trig_send = False

        if continueRoutine == True:
            run_break = True
      Each Frame:
        stim = "break_start"
        breakstart_trigger = trigger_numbers_dict[stim]

        if frameN == 0 and run_break:
            send_trigger(breakstart_trigger)
      End Routine:
        # send trigger for end break
        stim = "break_end"
        breakend_trigger = trigger_numbers_dict[stim]

        if run_break and not end_trig_send:
            send_trigger(breakend_trigger)
            end_trig_send = True
            core.wait(0.01) # wait so no overlap with next img trigger
    CodeComponent bids_break_logging
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(breaks_instruction,
                            block_num = block_num,
                            trial_num = trial_num,
                            type_of_stimulus="break",
                            component_label="break_instruction")
      End Routine:

        bids.mark_offset(breaks_instruction)
    TextComponent breaks_instruction
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
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    CodeComponent set_break_instruction_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            breaks_instruction.text = (
            "Break, the task will continue soon.\n"
            f"There are {int(total_block_number - block_num)} blocks left."
            )
        elif language=="german":
             breaks_instruction.text =(
            "Pause, die Aufgabe geht gleich weiter.\n"
             f"Es sind noch {int(total_block_number - block_num)} Blöcke übrig."
        )
        elif language=="french":
             breaks_instruction.text =(
            "Pause, l'exercice reprend tout de suite.")
    CodeComponent set_progress
      Code Type = Auto->JS
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      Begin Routine:
        timer_break = core.CountdownTimer(break_dur)
      Each Frame:
        frac = 1.0 - (int(timer_break.getTime()) / break_dur)  # 0→1
        progress_bar_breaks.progress = frac
    ProgressComponent progress_bar_breaks
      anchor = center-left
      borderColor = white
      fillColor = None
      lineWidth = 4
      pos = (-0.2, -0.05)
      progress [set every frame] = frac
      size = (0.4, 0.015)
      startVal [time (s)] = 0
      stopVal [duration (s)] = break_dur
      units = height
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    KeyboardComponent continue_button_break
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = break_dur
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    TextComponent instruction_continuebreak
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = break_dur
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    CodeComponent set_instruction_continuebreak_text
      Code Type = Auto->JS
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      Begin Routine:
        if language=="english":
            instruction_continuebreak.text = (
            "The break is over.\nPress any key to continue once you are ready.")
        elif language=="german":
             instruction_continuebreak.text =(
            "Die Pause ist vorbei.\nBitte drücken Sie eine beliebege Taste\n"
            "sobald sie bereit sind, weiterzumachen.")
  Routine sound_pres
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    CodeComponent set_trigger_word
      Code Type = Auto->JS
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      Begin Routine:
        trigNumber = trigger_numbers_dict["word presentation"]


        spoken_word.stop()  # make sure nothing is still playing from the previous trial
        soundScheduled = False
        trigOnFlipTime = None
      Each Frame:
        if (not soundScheduled) and tThisFlip >= 0.0 - frameTolerance:
            spoken_word.stop()
            spoken_word.setSound(f"sounds/{word_shown}.mp3", secs=1)

            nextFlipPTB = win.getFutureFlipTime(clock='ptb')
            win.callOnFlip(send_trigger, trigNumber)
            spoken_word.play(when=nextFlipPTB)


            soundScheduled = True
      End Routine:
        spoken_word.stop()
    CodeComponent set_word
      Code Type = Auto->JS
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      Begin Routine:
        if language == 'english':
            part1 = (word_shown_english)
            part2 = "_en"
            word_shown = part1 + part2


        elif language == 'german':
            part1 = (word_shown_german)
            part2 = "_german"
            word_shown = part1 + part2
    SoundComponent spoken_word
      durationEstim = 1
      forceEndRoutine = False
      resample = False
      sound [set every repeat] = $f"sounds/{word_shown}.mp3"
      startVal [condition] = 9999
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    CodeComponent bids_word_logging
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(spoken_word,
                                block_num = block_num,
                                trial_num = trial_num,
                                type_of_stimulus="word",
                                component_label="word",
                                wrd_img_match = int(1-is_mismatch),
                                concept_label = word_shown)
      End Routine:
        bids.mark_offset(spoken_word)
    TextComponent fix_cross
      color [set every repeat] = 1.0000, 1.0000, 1.0000
      durationEstim = response_time
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0
      stopVal [duration (s)] = response_time
      text = +
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    CodeComponent set_matchside
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        # positions
        prompt_positions_dir = ["left", "right"]

        nonmatch_key_idx = 1 # non-match is always on the right

        nonmatch_key = possible_keys[nonmatch_key_idx]
        match_key_idx = 1 - nonmatch_key_idx
        match_key = possible_keys[match_key_idx]
    CodeComponent allowed_keys
      Code Type = Auto->JS
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      Begin Routine:
        if match_responses == 0:
            allowed_key_list = [nonmatch_key]  # list of allowed keys
        else:
            # default: allow both match and nonmatch responses
            allowed_key_list = [match_key, nonmatch_key]
    KeyboardComponent key_resp
      allowedKeys = [nonmatch_key]
      durationEstim = 1
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0
      store = first key
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    CodeComponent code_key_resp
      Code Type = Auto->JS
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      Begin Routine:
        # reset key resp and correct answer
        key_resp.keys = None
        key_resp.corr = None
      Each Frame:
        if match_responses == 1:

            if is_mismatch == 0:
                answer_correct = match_key
            elif is_mismatch == 1:
                answer_correct = nonmatch_key
            # Evaluate participant response
            if key_resp.keys is None:
                key_resp.corr = "m"   # no response
            elif key_resp.keys == answer_correct:
                key_resp.corr = 1      # correct response
            else:
                key_resp.corr = 0      # wrong key


        if match_responses == 0:

            if is_mismatch == 0:
                answer_correct = None
            elif is_mismatch == 1:
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp.keys == answer_correct:
                key_resp.corr = 1      # correct response
            else:
                key_resp.corr = 0      # wrong key
    CodeComponent set_trigger_response
      Code Type = Auto->JS
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      Begin Routine:
        response_trigger = trigger_numbers_dict["response (button press)"]
        resp_trig_giv = False
      Each Frame:
        if (key_resp.keys is not None) and (not resp_trig_giv):

            if key_resp.corr == 1:      # correct response
                response_trigger = 127
            elif key_resp.corr == 0:      # correct response
                response_trigger = 128

            send_trigger(response_trigger)
            resp_trig_giv = True
            core.wait(0.01) # wait a bit so that feedback trigger doesnt start immediately
    CodeComponent bids_resp_logging
      Code Type = Auto->JS
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      End Routine:
        # response neeeds to be saved at end of trial
        bids.add_instant(
            "response",
            response=(key_resp.keys if key_resp.keys else "m"),
            response_time=(key_resp.rt if hasattr(key_resp, "rt") else None),
            correct=(key_resp.corr if hasattr(key_resp, "corr") else "m"),
            expected_response = ("m" if answer_correct == None else answer_correct),
            block_num = block_num,
            trial_num = trial_num,
            wrd_img_match = int(1-is_mismatch),
            component_label = "possible_button_press"
        )
    CodeComponent feedback_control_trigger
      Code Type = Auto->JS
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      Begin Routine:
        # prepare feedback in form of word color change or too slow message
        feedback_given = False

        feedback_trigger_sent = False
        feedback_trigger_code = trigger_numbers_dict["feedback"]
      Each Frame:
        if fdback == 1:
            if is_mismatch==1:  # Mismatch trial - button press required
                if (not feedback_given):
                    # Case 1: Button was pressed before deadline
                    if (key_resp.keys is not None):
                        if getattr(key_resp, 'corr', None) == 1:
                            fix_cross.setColor('green')
                            feedback_given = True
                            feedback_end = t + 0.2
                        else:
                            fix_cross.setColor('red')
                            feedback_given = True
                            feedback_end = t + 0.2
                    # Case 2: No response by deadline
                    elif (t >= response_time) and (key_resp.keys is None):
                        fix_cross.setColor('red')  # No response on mismatch = incorrect
                        feedback_given = True
                        feedback_end = t + 0.2

                # Send trigger ONCE when feedback starts
                if feedback_given and not feedback_trigger_sent:
                   send_trigger(feedback_trigger_code)
                   feedback_trigger_sent = True


                # feedback for 0.2s
                if feedback_given:
                    try:
                        if not fix_cross.autoDraw:
                            fix_cross.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        spoken_word.stop()
                        continueRoutine = False

            elif is_mismatch==0: # no button should be pressed

                if (not feedback_given):
                    # Case 1: Button was pressed (incorrect on match trial)
                    if (key_resp.keys is not None):
                        fix_cross.setColor('red')
                        feedback_given = True
                        feedback_end = t + 0.2
                    # Case 2: No response by deadline (correct on match trial)
                    elif (t >= response_time) and (key_resp.keys is None):
                        fix_cross.setColor('green')
                        feedback_given = True
                        feedback_end = t + 0.2

                # Send trigger ONCE when feedback starts
                if feedback_given and not feedback_trigger_sent:
                    send_trigger(feedback_trigger_code)
                    feedback_trigger_sent = True

                if feedback_given:
                    try:
                        if not fix_cross.autoDraw:
                            fix_cross.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        spoken_word.stop()
                        continueRoutine = False

        else:
            # no feedback: end on response or timeout
            if (key_resp.keys is not None) or (t >= response_time):
                spoken_word.stop()
                continueRoutine = False
  Routine sound_pres_prc
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    CodeComponent set_word_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == 'english':
            part1 = (word_shown_english)
            part2 = "_en"
            word_shown = part1 + part2


        elif language == 'german':
            part1 = word_shown_german
            part2 = "_german"
            word_shown = (part1 + part2)

        elif language == 'french':
            part1 = (word_shown_french)
            part2 = "_fr"
            word_shown = part1 + part2
    SoundComponent spoken_word_prc
      durationEstim = 1
      forceEndRoutine = False
      resample = False
      sound [set every repeat] = $ "sounds//" + word_shown + ".mp3"
      startVal [time (s)] = 0.0
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    TextComponent fix_cross_prc
      color [set every repeat] = white
      durationEstim = response_time
      font = $font_name
      letterHeight = 0.03
      startVal [time (s)] = 0
      text = +
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    CodeComponent set_matchside_prc
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        # positions
        prompt_positions_dir = ["left", "right"]

        nonmatch_key_idx = 1 # non-match is always on the right

        nonmatch_key = possible_keys[nonmatch_key_idx]
        match_key_idx = 1 - nonmatch_key_idx
        match_key = possible_keys[match_key_idx]
    CodeComponent allowed_keys_prc
      Code Type = Auto->JS
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      Begin Routine:
        if match_responses == 0:
            allowed_key_list = [nonmatch_key]  # list of allowed keys
        else:
            # default: allow both match and nonmatch responses
            allowed_key_list = [match_key, nonmatch_key]
    KeyboardComponent key_resp_prc
      allowedKeys = [nonmatch_key]
      durationEstim = 1.25
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0
      stopVal [duration (s)] = response_time
      store = first key
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    CodeComponent code_key_resp_prc
      Code Type = Auto->JS
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      Begin Routine:
        # reset key resp and correct answer
        key_resp_prc.keys = None
        key_resp_prc.corr = None
      Each Frame:
        if match_responses == 1:

            if match_idx == 1:
                answer_correct = match_key
            elif match_idx == 0:
                answer_correct = nonmatch_key
            # Evaluate participant response
            if key_resp_prc.keys is None:
                key_resp_prc.corr = "m"   # no response
            elif key_resp_prc.keys == answer_correct:
                key_resp_prc.corr = 1      # correct response
            else:
                key_resp_prc.corr = 0      # wrong key


        if match_responses == 0:

            if match_idx == 1:
                answer_correct = None
            elif match_idx == 0:
                answer_correct = nonmatch_key

            # Evaluate participant response
            if key_resp_prc.keys == answer_correct:
                key_resp_prc.corr = 1      # correct response
            else:
                key_resp_prc.corr = 0      # wrong key
    CodeComponent feedback_control_2
      Code Type = Auto->JS
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      Begin Routine:
        # prepare feedback in form of word color change or too slow message
        feedback_given = False
        show_until = None
      Each Frame:
        if fdback == 1:
            if match_idx==0:  # Mismatch trial - button press required
                if (not feedback_given):
                    # Case 1: Button was pressed before deadline
                    if (key_resp_prc.keys is not None):
                        if getattr(key_resp_prc, 'corr', None) == 1:
                            fix_cross_prc.setColor('green')
                        else:
                            fix_cross_prc.setColor('red')
                        feedback_given = True
                        feedback_end = t + 0.2
                    # Case 2: No response by deadline
                    elif (t >= response_time):
                        fix_cross_prc.setColor('red')  # No response on mismatch = incorrect
                        feedback_given = True
                        feedback_end = t + 0.2

                # feedback for 0.2s
                if feedback_given:
                    try:
                        if not fix_cross_prc.autoDraw:
                            fix_cross_prc.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        continueRoutine = False

            elif match_idx==1: # no button should be pressed

                if (not feedback_given):
                    # Case 1: Button was pressed (incorrect on match trial)
                    if (key_resp_prc.keys is not None):
                        fix_cross_prc.setColor('red')
                        feedback_given = True
                        feedback_end = t + 0.2
                    # Case 2: No response by deadline (correct on match trial)
                    elif (t >= response_time):
                        fix_cross_prc.setColor('green')
                        feedback_given = True
                        feedback_end = t + 0.2

                # Hold feedback for 0.2s then end
                if feedback_given:
                    try:
                        if not fix_cross_prc.autoDraw:
                            fix_cross_prc.setAutoDraw(True)
                    except Exception:
                        pass
                    if t >= feedback_end:
                        continueRoutine = False

        else:
            # no feedback: end on response or timeout
            if (key_resp_prc.keys is not None) or (t >= response_time):
                continueRoutine = False
  Routine instructions_04
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    CodeComponent bids_instruc_04
      Code Type = Auto->JS
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      Each Frame:
        ## schedule bids trigger setting
        # log onset at first frame
        #if frameN == 0:
            #bids.schedule_onset(instruction_part3,
                                #trial_type="localizer",
                                #stim_label="instruction_03")


        bids.schedule_onset(instruction_part4,
                                type_of_stimulus="instructions",
                                component_label="instruction_part4")
      End Routine:
        # log offset at last frame of routine
        #if not continueRoutine:
            #bids.mark_offset(instruction_part3)
        bids.mark_offset(instruction_part4)
    TextComponent instruction_part4
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
        "Please respond as quickly and accurately as possible.\n"
        "We’ll start with some practice trials.\n"
        "Use the upper key (red) for mismatches.\n\n"
        "[Press any key to continue.] "
        )

        if language == "german":
            instruction_part4.text = (
        "Bitte antworten Sie so schnell und genau wie möglich.\n"
        "Wir beginnen nun mit einigen Übungsdurchgängen.\n"
        "Nutzen Sie die obere Taste (rot) für Nicht-Übereinstimmungen.\n\n"
        "[Drücken Sie eine beliebige Taste, um fortzufahren.]"
        )

        if language == "french":
            instruction_part4.text = (
        "Veuillez répondre aussi rapidement et précisément que possible. "
        "Nous allons commencer par quelques essais. "
        "Utilisez la flèche droite pour les non-correspondances. \n"
        "[Appuyez sur la touche Entrée pour continuer.] "
        )
    KeyboardComponent continue_button_9
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine check_megtrig
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import sys, pkgutil
        print("PYEXE:", sys.executable)         # PsychoPy's python.exe
        print("First site-packages on path:\n", "\n".join(sys.path[:5]))

        # See if either name is visible
        print("has meg_triggers? ", any(m.name == "meg_triggers" for m in pkgutil.iter_modules()))
        print("has cimh_psychopy_meg? ", any(m.name == "cimh_psychopy_meg" for m in pkgutil.iter_modules()))
  Routine instructions_startexp_02
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    CodeComponent bids_instruc_startexp_2
      Code Type = Auto->JS
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      Each Frame:
        bids.schedule_onset(instruction_startexp_2,
                            type_of_stimulus="instructions",
                            component_label="instruction_start_2")
      End Routine:
        bids.mark_offset(instruction_startexp)
    TextComponent instruction_startexp_2
      font = $font_name
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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    CodeComponent instruction_startexp_text_2
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_startexp_2.text = (
        "Please try to move and blink as little\n"
        "as possible during each task block.\n"
        "After each task block, there will be a short break\n"
        "where you can rest and move a little.\n"
        "As soon as the task starts again, please stop moving\n"
        "and remain as still as possible.\n\n"
        "[Press any key to start the main task.]"
        )

        if language == "german":
            instruction_startexp_2.text = (
        "Bitte versuchen Sie während der Aufgabenblöcke sich so wenig\n"
        "wie möglich zu bewegen und so wenig wie möglich zu blinzeln.\n"
        "Nach jedem Aufgabenblock gibt es eine kurze Pause,\n"
        "in der Sie sich ausruhen und ein wenig bewegen können.\n"
        "Sobald die Aufgabe wieder beginnt, bleiben Sie bitte wieder so ruhig wie möglich sitzen.\n\n"
        "[Drücken Sie eine beliebige Taste, um die Hauptaufgabe zu starten.]"
        )

        if language == "french":
            instruction_startexp.text = (
        "Vous avez terminé tous les essais pratiques. La tâche principale va maintenant commencer. "
        "Appuyez toujours sur la flèche droite lorsque le mot ne correspond pas à l'image précédente. "
        "Il y aura des pauses régulières pendant lesquelles vous pourrez vous reposer un instant. \n"
        "[Appuyez sur la touche Entrée pour commencer la tâche principale.] "
        )
    KeyboardComponent continue_button_8
      allowedKeys = possible_keys
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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Flow
  Routine settings
  Routine instructions
  Routine instructions_02
  Routine instructions_03
  Routine instructions_04
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = sequences/localiser_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_shown': 'anchor.jpg', 'word_shown_german': 'Anker', 'word_shown_french': 'ancre', 'word_shown_english': 'anchor', 'ITI_length': 0.75, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'ant.jpg', 'word_shown_german': 'Ameise', 'word_shown_french': 'fourmi', 'word_shown_english': 'ant', 'ITI_length': 0.89, 'correct_response': 'r', 'match_idx': 1, 'nonmatch_pres_side': 'left'},
      {'image_shown': 'axe.jpg', 'word_shown_german': 'Pferd', 'word_shown_french': 'cheval', 'word_shown_english': 'horse', 'ITI_length': 0.85, 'correct_response': 'y', 'match_idx': 0, 'nonmatch_pres_side': 'left'},
      {'image_shown': 'bus.jpg', 'word_shown_german': 'Bus', 'word_shown_french': 'bus', 'word_shown_english': 'bus', 'ITI_length': 1.01, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'ball.jpg', 'word_shown_german': 'Gesicht', 'word_shown_french': 'visage', 'word_shown_english': 'face', 'ITI_length': 1.04, 'correct_response': 'r', 'match_idx': 0, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'banana.jpg', 'word_shown_german': 'Banane', 'word_shown_french': 'banane', 'word_shown_english': 'banana', 'ITI_length': 0.99, 'correct_response': 'y', 'match_idx': 1, 'nonmatch_pres_side': 'right'},
      {'image_shown': 'glasses.jpg', 'word_shown_german': 'Brille', 'word_shown_french': 'lunettes', 'word_shown_english': 'glasses', 'ITI_length': 0.79, 'correct_response': 'r', 'match_idx': 1, 'nonmatch_pres_side': 'left'}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
    Routine image_pres_prc
    Routine sound_pres_prc
    Routine ITI_prc
  LoopTerminator trials_practice
  Routine instructions_startexp
  Routine instructions_startexp_02
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block': 1, 'trial_in_block': 1, 'concept': 'bread', 'concept_num': 3, 'image_shown': 'bread\\bread_03.jpg', 'word_shown_english': 'bread', 'word_shown_german': 'Brot', 'word_shown_french': 'Pain', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 1.15, 'correct_response': None, 'nonmatch_pres_side': None},
      {'block': 1, 'trial_in_block': 2, 'concept': 'hammer', 'concept_num': 7, 'image_shown': 'hammer\\hammer_20.jpg', 'word_shown_english': 'hammer', 'word_shown_german': 'Hammer', 'word_shown_french': 'Marteau', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 1.05, 'correct_response': None, 'nonmatch_pres_side': None},
      {'block': 1, 'trial_in_block': 3, 'concept': 'bread', 'concept_num': 3, 'image_shown': 'bread\\bread_09.jpg', 'word_shown_english': 'bread', 'word_shown_german': 'Brot', 'word_shown_french': 'Pain', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 0.98, 'correct_response': None, 'nonmatch_pres_side': None},
      {'block': 1, 'trial_in_block': 4, 'concept': 'hammer', 'concept_num': 7, 'image_shown': 'hammer\\hammer_34.jpg', 'word_shown_english': 'hammer', 'word_shown_german': 'Hammer', 'word_shown_french': 'Marteau', 'is_prompt': 1, 'is_mismatch': 0, 'ITI_length': 0.88, 'correct_response': None, 'nonmatch_pres_side': None}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
    Routine image_pres
    Routine sound_pres
    Routine ITI
    Routine break_3
  LoopTerminator trials
  Routine instructions_end
