PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_sounds_volume
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trials_sound_test
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    SoundComponent spoken_test
      durationEstim = 1
      forceEndRoutine = False
      resample = False
      sound [set every repeat] = $ "sounds//" + word_shown + ".mp3"
      startVal [time (s)] = 0.0
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  Routine break_2
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequences/trials_volume_test.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'word_shown': 'book_en'},
      {'word_shown': 'fish_en'},
      {'word_shown': 'guitar_en'},
      {'word_shown': 'pencil_en'},
      {'word_shown': 'pizza_en'},
      {'word_shown': 'tree_en'},
      {'word_shown': 'plane_en'},
      {'word_shown': 'phone_en'}]
    Routine trials_sound_test
    Routine break_2
  LoopTerminator trials
